PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = MouseScrennCalib
  Screen = 1
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Routines
  Routine trial
    CodeComponent code
      Begin Experiment:
        tex1 = np.ones((2,2,3)) *-1
        tex1[0, 0, 2] = 1
        tex1[1, 1, 2] = 1
    GratingComponent grating
      tex = $tex1
      stopVal [duration (s)] = 3
      interpolate = nearest
      units = pix
      texture resolution = 512
      startVal [time (s)] = 3
      sf = 0.5
      size = 2048
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    PolygonComponent polygon
      fillColor [set every repeat] = $color
      stopVal [duration (s)] = 3
      interpolate = nearest
      lineColor [set every repeat] = $color
      startVal [time (s)] = 0.0
      size = (2, 2)
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = MouseCalib.xlsx
    loopType = sequential
    nReps = 10
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    conditions:
      [{'color': [-1, -1, -0.2]},
      {'color': [-1, -1, -0.1]},
      {'color': [-1, -1, -0.05]},
      {'color': [-1, -1, 0]},
      {'color': [-1, -1, 0.05]},
      {'color': [-1, -1, 0.1]},
      {'color': [-1, -1, 0.2]}]
    Routine trial
  LoopTerminator trials
