PsychoPy2experiment version="1.85.1"
Settings
  Monitor = second
  color = $[-1,-1,0]
  Experiment info = {u'session': u'001', u'participant': u'test'}
  Units = norm
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  expName = RF
  Screen = 2
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Routines
  Routine trial
    CodeComponent tex
      Begin Experiment:
        import numpy as np
        import psychopy.filters
        grating_res = 256

        grating = psychopy.filters.makeGrating(res=grating_res, cycles=1.0)
        # initialise a 'black' texture
        tex = np.ones((grating_res, grating_res, 3)) * -1.0
        # replace the blue channel with the grating
        tex[..., -1] = grating
    GratingComponent grating
      tex = $tex
      stopVal [duration (s)] = 3
      mask = gauss
      pos [set every repeat] = $pos
      phase [set every frame] = trialClock.getTime()*2
      ori [set every repeat] = $ori
      startVal [time (s)] = 3
      sf [set every repeat] = $sf
      size = (1, 1)
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    CodeComponent code
      Begin Experiment:
        import sys
      Begin Routine:
        print('Position: %s, Orientation: %s, SF: %s' % (pos, ori, sf))
        logging.flush()
        sys.stdout.flush()
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = RF_params.xlsx
    loopType = sequential
    nReps = 5
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    conditions:
      [{'freq': 1, 'ori': 0, 'pos': [0.66, -0.66], 'sf': 2},
      {'freq': 1, 'ori': 45, 'pos': [0.66, -0.66], 'sf': 2},
      {'freq': 1, 'ori': 90, 'pos': [0.66, -0.66], 'sf': 2},
      {'freq': 1, 'ori': 135, 'pos': [0.66, -0.66], 'sf': 2},
      {'freq': 1, 'ori': 0, 'pos': [0.66, 0.66], 'sf': 2},
      {'freq': 1, 'ori': 45, 'pos': [0.66, 0.66], 'sf': 2},
      {'freq': 1, 'ori': 90, 'pos': [0.66, 0.66], 'sf': 2},
      {'freq': 1, 'ori': 135, 'pos': [0.66, 0.66], 'sf': 2},
      {'freq': 1, 'ori': 0, 'pos': [-0.66, -0.66], 'sf': 2},
      {'freq': 1, 'ori': 45, 'pos': [-0.66, -0.66], 'sf': 2},
      {'freq': 1, 'ori': 90, 'pos': [-0.66, -0.66], 'sf': 2},
      {'freq': 1, 'ori': 135, 'pos': [-0.66, -0.66], 'sf': 2},
      {'freq': 1, 'ori': 0, 'pos': [-0.66, -0.66], 'sf': 2},
      {'freq': 1, 'ori': 45, 'pos': [-0.66, -0.66], 'sf': 2},
      {'freq': 1, 'ori': 90, 'pos': [-0.66, -0.66], 'sf': 2},
      {'freq': 1, 'ori': 135, 'pos': [-0.66, -0.66], 'sf': 2},
      {'freq': 1, 'ori': 0, 'pos': [-0.66, -0.66], 'sf': 2},
      {'freq': 1, 'ori': 45, 'pos': [-0.66, -0.66], 'sf': 2},
      {'freq': 1, 'ori': 90, 'pos': [-0.66, -0.66], 'sf': 2},
      {'freq': 1, 'ori': 135, 'pos': [-0.66, -0.66], 'sf': 2},
      {'freq': 1, 'ori': 0, 'pos': [-0.66, -0.66], 'sf': 2},
      {'freq': 1, 'ori': 45, 'pos': [-0.66, -0.66], 'sf': 2},
      {'freq': 1, 'ori': 90, 'pos': [-0.66, -0.66], 'sf': 2},
      {'freq': 1, 'ori': 135, 'pos': [-0.66, -0.66], 'sf': 2}]
    Routine trial
  LoopTerminator trials
